config:
  title: Aquarium Thermocycler Models
  description: Models for standardizing usage of thermocyclers
  copyright: University of Washington
  version: 0.0.1
  authors: [{name: Devin Strickland, affiliation: University of Washington}, {name: Eriberto Lopez, affiliation: University of Washington}]
  maintainer: {name: Devin Strickland, email: strcklnd@uw.edu}
  acknowledgements: [{name: Ben Keller, affiliation: University of Washington}]
  github: {user: dvnstrcklnd, repo: aq-thermocyclers, organization: klavinslab}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
operation_type: PCR Test
category: Test
deployed: false
on_the_fly: false
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protocol:
needs "PCR Libs/PCRComposition"
needs "PCR Libs/PCRProgram"
needs "Thermocyclers/Thermocyclers"

class Protocol

  include ThermocyclerHelper

  def main

    composition = PCRCompositionFactory.build(
      program_name: "CDC_TaqPath_CG"
    )
    program = PCRProgramFactory.build(
      program_name: "CDC_TaqPath_CG", 
      volume: composition.volume
    )

    show do
      title "Composition and Program Test"

      note 'From the PCRProgram'
      table program.table
      note 'From the PCRComposition'
      note "Total volume: #{composition.volume}"
    end
    
    thermocycler = ThermocyclerFactory.build(
      model: TestThermocycler::MODEL
    )

    show do 
      title 'Thermocycler Test'

      note 'Template files:'
      note thermocycler.program_template_file(program: program)
      note thermocycler.layout_template_file(program: program)

      note 'Test image path:'
      note thermocycler.open_software_image
    end

    set_up_program(
      thermocycler: thermocycler, 
      program: program, 
      composition: composition
    )

    load_plate_and_start_run(
      thermocycler: thermocycler, 
      filename: 'test_filename'
    )

    export_measurements(thermocycler: thermocycler)

    {}

  end

end

test:
class ProtocolTest < ProtocolTestBase

  def setup

      add_random_operations(3)

  end

  def analyze
      log('Hello from Nemo')
      assert_equal(@backtrace.last[:operation], 'complete')
  end

end

library: {name: AbstractThermocycler, category: Thermocyclers}
code_source:
# TODO: Make a qPCR MixIn
# TODO: Can duck type thermocycler on qPCR MixIn when available

class AbstractThermocycler

  # CONSTANTS that really shouldn't ever change
  # Should be overriden in concrete class
  MODEL = ""
  PROGRAM_EXT = ""
  LAYOUT_EXT =  ""
  SOFTWARE_NAME = "thermocycler software"
  
  private_constant :MODEL, :PROGRAM_EXT, :LAYOUT_EXT, :SOFTWARE_NAME

  attr_reader :params

  # Instantiates the class and sets the `@params` insteance variable
  #
  # @return [Thermocycler]
  def initialize()
    @params = default_params.update(user_defined_params)
  end

  # Lab-specific, user-defined parameters
  #
  # @note Should be overriden in concrete class
  # @return [Hash]
  def user_defined_params()
    {}
  end

  # The model of the thermocycler
  #
  # @return [String]
  def model()
    self.class.const_get(:MODEL)
  end

  # The name of the software that controls the thermocycler
  #
  # @return [String]
  def software_name()
    self.class.const_get(:SOFTWARE_NAME)
  end

  ########## Language Methods
  # These methods are not very specific and will probably need to be overridden
  #   in the concrete classes.

  # Instructions for opening the software that controls the thermocycler
  #
  # @return [String]
  def open_software()
    "Open #{software_name}"
  end

  # Instructions for setting the dye channel on a qPCR thermocycler
  #
  # @param composition [PCRComposition]
  # @param dye_name [String] can be supplied instead of a `PCRComposition`
  # @return [String]
  # @todo should be moved to MixIn
  def set_dye(composition: nil, dye_name: nil)
    dye_name = composition.dye.try(:input_name) || dye_name
    "Choose <b>#{dye_name}</b> as the dye"
  end

  # Instructions for selecting the PCR program template in the software
  #
  # @param program [PCRProgram]
  # @return [String]
  def select_program_template(program:)
    file = program_template_file(program: program)
    "Choose the program template <b>#{file}</b>"
  end

  # Instructions for selecting the plate layout template in the software
  #
  # @param program [PCRProgram]
  # @return [String]
  def select_layout_template(program:)
    file = layout_template_file(program: program)
    "Choose the layout template <b>#{file}</b>"
  end

  # Instructions for placing a plate in the instrument
  #
  # @param plate [Collection]
  # @return [String]
  def place_plate_in_instrument(plate:)
    "Place plate #{plate} in the thermocycler"
  end

  # Instructions for confirming the orientation of a plate in the instrument
  #
  # @return [String]
  def confirm_plate_orientation()
    "MAKE SURE THAT THE PLATE IS IN THE CORRECT ORIENTATION"
  end

  # Instructions for opening the lid
  #
  # @return [String]
  def open_lid()
    "Click the <b>Open Lid</b> button"
  end

  # Instructions for closing the lid
  #
  # @return [String]
  def close_lid()
    "Click the <b>Close Lid</b> button"
  end

  # Instructions for starting the run
  #
  # @return [String]
  def start_run()
    "Click the <b>Start Run</b> button"
  end

  # Instructions for saving an experiment file
  #
  # @param filename [String] the name of the file (without the full path)
  # @return [String]
  def save_experiment_file(filename:)
    "Save the experiment as #{filename} in #{params[:experiment_filepath]}"
  end

  # Instructions for exporting measurements from a qPCR run
  #
  # @return [String]
  def export_measurements()
    "Click <b>Export</b><br>" +
    "Select <b>Export All Data Sheets</b><br>" +
    "Export all sheets as CSV<br>" +
    "Save files to the #{params[:export_filepath]} directory"
  end

  ########## Image Methods
  # These probably should NOT be overridden in the concrete classes

  # Image for launching the software that controls the thermocycler
  #
  # @return [String]
  def open_software_image()
    image_path(image_name: params[:open_software_image])
  end

  # Image for setting up the software workspace
  #
  # @return [String]
  def setup_workspace_image()
    image_path(image_name: params[:setup_workspace_image])
  end

  # Image for selecting the PCR program template in the software
  #
  # @return [String]
  def setup_program_image()
    image_path(image_name: params[:setup_program_image])
  end

  # Image for selecting the plate layout template in the software
  #
  # @return [String]
  def setup_plate_layout_image()
    image_path(image_name: params[:setup_plate_layout_image])
  end

  # Image for opening the lid
  #
  # @return [String]
  def open_lid_image()
    image_path(image_name: params[:open_lid_image])
  end

  # Image for closing the lid
  #
  # @return [String]
  def close_lid_image()
    image_path(image_name: params[:close_lid_image])
  end

  # Image for starting the run
  #
  # @return [String]
  def start_run_image()
    image_path(image_name: params[:start_run_image])
  end

  # Image for exporting measurements from a qPCR run
  #
  # @return [String]
  def export_results_image()
    image_path(image_name: params[:export_results_image])
  end

  ########## Template File Methods
  # These probably should NOT be overridden in the concrete classes

  def program_template_file(program:)
    template_file(
      template_name: program.program_template_name, 
      extension: :PROGRAM_EXT
    )
  end

  def layout_template_file(program:)
    template_file(
      template_name: program.layout_template_name, 
      extension: :LAYOUT_EXT
    )
  end

  private

  def default_params()
    {
      experiment_filepath: "",
      export_filepath: "",
      image_path: "",
      open_software_image: "open_software.png",
      setup_workspace_image: "setup_workspace.png",
      setup_program_image: "setup_program.png",
      setup_plate_layout_image: "setup_plate_layout.png",
      open_lid_image: "open_lid.png",
      close_lid_image: "close_lid.png",
      start_run_image: "start_run.png",
      export_results_image: "export_results.png"
    }
  end

  def image_path(image_name:)
    File.join(params[:image_path], image_name)
  end

  def template_file(template_name:, extension:)
    ext = self.class.const_get(extension)
    (template_name + '.' + ext).gsub(/\.+/, '.')
  end

end

library: {name: BioRadCFX96, category: Thermocyclers}
code_source:
# @author Eriberto Lopez <elopez3@uw.edu>
# @note BioRad module originally deployed as `QPCR_ThermocyclerLib`
#   on UW BIOFAB production 10/05/18

needs "Thermocyclers/AbstractThermocycler"

class BioRadCFX96 < AbstractThermocycler

  MODEL = "BioRad CFX96"
  PROGRAM_EXT = ".prcl"
  LAYOUT_EXT =  ".pltd"

  # Instantiates the class
  #
  # @return [BioRadCFX96]
  def initialize()
    super()
  end

  # Lab-specific, user-defined parameters
  #
  # @return [Hash]
  def user_defined_params()
    {
      experiment_filepath: "Desktop/_qPCR_UWBIOFAB",
      export_filepath: "Desktop/BIOFAB qPCR Exports",
      image_path: "Actions/BioRad_qPCR_Thermocycler",
      open_software_image: "open_biorad_thermo_workspace.JPG",
      setup_workspace_image: "setup_workspace.JPG",
      setup_program_image: "setting_up_qPCR_thermo_conditions.png",
      setup_plate_layout_image: "setting_up_plate_layout_v1.png",
      open_lid_image: "open_lid.png",
      close_lid_image: "close_lid.png",
      start_run_image: "start_run.png",
      export_results_image: "exporting_qPCR_quantification.png"
    }
  end
end

library: {name: TestThermocycler, category: Thermocyclers}
code_source:
needs 'Thermocyclers/AbstractThermocycler'

class TestThermocycler < AbstractThermocycler

  # CONSTANTS that really shouldn't ever change
  MODEL = "Test Model"
  PROGRAM_EXT = ".abc"
  LAYOUT_EXT =  "xyz" # Intentionally missing leading dot for test

  # Instantiates the class
  #
  # @return [TestThermocycler]
  def initialize()
    super()
  end

  # Lab-specific, user-defined parameters
  #
  # @return [Hash]
  def user_defined_params()
    {
      experiment_filepath: "Desktop/test_experiment_path",
      export_filepath: "Desktop/test_export_path",
      image_path: "Actions/TestThermocycler"
    }
  end

  def say_hello()
    "Hello, my name is #{MODEL}"
  end

end

library: {name: Thermocyclers, category: Thermocyclers}
code_source:
# Library for handling thermocyclers, including qPCR thermocyclers
#
# @author Devin Strickland <strcklnd@uw.edu>

needs "Thermocyclers/TestThermocycler"
needs "Thermocyclers/BioRadCFX96"

# Helper module for standard thermocycler procedures
#
# @author Devin Strickland <strcklnd@uw.edu>
# @author Eriberto Lopez <elopez3@uw.edu>
# @note methods originally deployed as `QPCR_ThermocyclerLib`
#   on UW BIOFAB production 10/05/18
module ThermocyclerHelper

  # Steps for setting up a proram in a thermocycler
  #
  # @param thermocycler [Thermocycler]
  # @param program [PCRProgram]
  # @param composition [PCRComposition]
  def set_up_program(thermocycler:, program:, composition:)
    show do
      title "Set Up #{thermocycler.model} Thermocycler"

      note thermocycler.open_software
      image thermocycler.open_software_image
      separator

      # TODO: What happens if this is not a qPCR experiment?
      note thermocycler.set_dye(composition: composition)
      image thermocycler.setup_workspace_image
      separator

      note thermocycler.select_program_template(program: program)
      image thermocycler.setup_program_image
      separator

      # TODO: What happens if this is not a qPCR experiment?
      note thermocycler.select_layout_template(program: program)
      image thermocycler.setup_plate_layout_image
    end
  end

  # Steps for loading physical tubes or plates into a thermocycler
  #
  # @param thermocycler [Thermocycler]
  # @param items [Item, Array<Item>]
  # @param filename [String] the filename to safe the experiment file 
  def load_plate_and_start_run(thermocycler:, items: [], filename: nil)

    # Normalize the presentation of `items`
    items = [items] if items.respond_to?(:collection?)

    show do
      title "Start Run on #{thermocycler.model} Thermocycler"
      
      note thermocycler.open_lid
      image thermocycler.open_lid_image
      separator

      # TODO: Make this work for plates, stripwells, and individual tubes
      if items.length == 1 && is_96well_plate?(items.first)
        note thermocycler.place_plate_in_instrument(plate: items.first)
        warning thermocycler.confirm_plate_orientation
      else
        note 'Place samples in thermocycler'
      end
      separator

      note thermocycler.close_lid
      image thermocycler.close_lid_image
      separator

      note thermocycler.start_run
      # TODO: What happens if this is not a qPCR experiment?
      note thermocycler.save_experiment_file(filename: filename) if filename.present?
      image thermocycler.start_run_image
    end
  end

  # Export the measurements, if a qPCR run
  #
  # @param thermocycler [Thermocycler]
  def export_measurements(thermocycler:)
    show do
      title "Export Measurements"
      
      note "Once the run has finished, export the measurements"
      note thermocycler.export_measurements()
      image thermocycler.export_results_image
    end
  end

  # TODO: A method from Eriberto Lopez's code that I haven't implemented yet
  # def upload_measurments(experiment_name)
  #   upload_filename = experiment_name + " - Quantification Summary_0.csv" # Suffix of file will always be the same
  #   up_show, up_sym = upload_show(upload_path = EXPORT_FILEPATH, upload_filename)
  #   if debug
  #     upload = Upload.find(11278) # Dummy data set
  #   else
  #     upload = find_upload_from_show(up_show, up_sym)
  #   end
  #   return upload
  # end

  private

  # Test whether an item is a 96 well plate
  #
  # @param item [Item]
  # @return [Boolean]
  def is_96well_plate?(item)
    item.collection? && item.capacity == 96
  end
end

# Factory class for building thermocycler objects
#
# @author Devin Strickland <strcklnd@uw.edu>
class ThermocyclerFactory

  # Instantiates a new `Thermocycler`
  #
  # @param model [String] the `MODEL` of the thermocycler. Must match the 
  #   constant `MODEL` in an exisiting thermocycler class.
  # @return [Thermocycler]
  def self.build(model:)
    case model
    when TestThermocycler::MODEL
      TestThermocycler.new()
    when BioRadCFX96::MODEL
      BioRadCFX96.new()
    else
      msg = "Unrecognized Thermocycler Model: #{model}"
      raise ThermocyclerInputError.new(msg)
    end
  end
end

class ThermocyclerInputError < ProtocolError; end
